PsychoPy2experiment version="2024.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1707, 1067]
  expName = untitled
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine practise_instruction
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        为了让您熟悉实验流程和按键操作，我们先进行一个简短的练习阶段。
        >  * 如果您认为屏幕左侧的方案更好，请按键盘上的 [A]。
        >  * 如果您认为屏幕右侧的方案更好，请按键盘上的 [L]。
        > 请注意：练习阶段的选择不计入最终报酬，但请您像对待正式实验一样认真对待每一次选择。

        > 按 [空格键] 开始练习。
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trail_loop_no_limited
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    TextComponent T_L_N
      color [set every repeat] = white
      contrast [set every repeat] = 1
      flip [set every repeat] = None
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.05
      ori [set every repeat] = 0
      pos [set every repeat] = (-0.4, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $Title_Left
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    TextComponent S_L_N
      flip [set every repeat] = None
      letterHeight = 0.04
      ori [set every repeat] = 0
      pos [set every repeat] = (-0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = 自己:$Self_A
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    TextComponent O_L_N
      flip [set every repeat] = None
      letterHeight [set every repeat] = 0.04
      ori [set every repeat] = 0
      pos [set every repeat] = (-0.4, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = 他人:$Others_A
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    TextComponent T_R_N
      color [set every repeat] = white
      contrast [set every repeat] = 1
      flip [set every repeat] = None
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.05
      ori [set every repeat] = 0
      pos [set every repeat] = (0.4, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $Title_Right
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    TextComponent S_R_L
      color [set every repeat] = white
      contrast [set every repeat] = 1
      flip [set every repeat] = None
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.04
      ori [set every repeat] = 0
      pos [set every repeat] = (0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = 自己:$Self_B
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    TextComponent O_R_N
      color [set every repeat] = white
      contrast [set every repeat] = 1
      flip [set every repeat] = None
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.04
      ori [set every repeat] = 0
      pos [set every repeat] = (0.4, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = 他人:$Others_B
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    KeyboardComponent key_formal_no_limited
      allowedKeys [set every repeat] = 'a','l'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    PolygonComponent worn_Nl
      contrast [set every repeat] = 1
      fillColor [set every repeat] = green
      lineColor [set every repeat] = white
      lineWidth [set every repeat] = 1
      pos [set every repeat] = (0, -0.5)
      shape = rectangle
      size [set every repeat] = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine Trail_loop_limited
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    TextComponent T_L
      color [set every repeat] = white
      contrast [set every repeat] = 1
      flip [set every repeat] = None
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.05
      ori [set every repeat] = 0
      pos [set every repeat] = (-0.4, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $Title_Left
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    TextComponent S_L
      flip [set every repeat] = None
      letterHeight = 0.04
      ori [set every repeat] = 0
      pos [set every repeat] = (-0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = 自己:$Self_A
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    TextComponent O_L
      flip [set every repeat] = None
      letterHeight [set every repeat] = 0.04
      ori [set every repeat] = 0
      pos [set every repeat] = (-0.4, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = 他人:$Others_A
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    TextComponent T_R
      color [set every repeat] = white
      contrast [set every repeat] = 1
      flip [set every repeat] = None
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.05
      ori [set every repeat] = 0
      pos [set every repeat] = (0.4, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $Title_Right
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    TextComponent S_R
      color [set every repeat] = white
      contrast [set every repeat] = 1
      flip [set every repeat] = None
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.04
      ori [set every repeat] = 0
      pos [set every repeat] = (0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = 自己:$Self_B
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    TextComponent O_R
      color [set every repeat] = white
      contrast [set every repeat] = 1
      flip [set every repeat] = None
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.04
      ori [set every repeat] = 0
      pos [set every repeat] = (0.4, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = 他人:$Others_B
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    KeyboardComponent key_formal_limited
      allowedKeys [set every repeat] = 'a','l'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    PolygonComponent worn_formal
      contrast [set every repeat] = 1
      fillColor [set every repeat] = red
      lineColor [set every repeat] = white
      lineWidth [set every repeat] = 1
      pos [set every repeat] = (0, -0.5)
      shape = rectangle
      size [set every repeat] = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine practise_time_limited
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    TextComponent Title_L
      color [set every repeat] = white
      contrast [set every repeat] = 1
      flip [set every repeat] = None
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.05
      ori [set every repeat] = 0
      pos [set every repeat] = (-0.4, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $Title_Left
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    TextComponent Self_L
      flip [set every repeat] = None
      letterHeight = 0.04
      ori [set every repeat] = 0
      pos [set every repeat] = (-0.4, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = 自己:$Self_A
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    TextComponent Others_L
      flip [set every repeat] = None
      letterHeight [set every repeat] = 0.04
      ori [set every repeat] = 0
      pos [set every repeat] = (-0.4, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = 他人:$Others_A
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    TextComponent Title_R
      color [set every repeat] = white
      contrast [set every repeat] = 1
      flip [set every repeat] = None
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.05
      ori [set every repeat] = 0
      pos [set every repeat] = (0.4, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $Title_Right
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    TextComponent Self_R
      color [set every repeat] = white
      contrast [set every repeat] = 1
      flip [set every repeat] = None
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.04
      ori [set every repeat] = 0
      pos [set every repeat] = (0.4, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = 自己:$Self_B
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    TextComponent Others_R
      color [set every repeat] = white
      contrast [set every repeat] = 1
      flip [set every repeat] = None
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.04
      ori [set every repeat] = 0
      pos [set every repeat] = (0.4, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = 他人:$Others_B
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    KeyboardComponent key_prac_limited
      allowedKeys [set every repeat] = 'a','l'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine prac_time_none_limited
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    TextComponent Title_Left_NL
      color [set every repeat] = white
      contrast [set every repeat] = 1
      flip [set every repeat] = None
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.05
      ori [set every repeat] = 0
      pos [set every repeat] = (-0.4, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $Title_Left
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    TextComponent Self_Left_NL
      flip [set every repeat] = None
      letterHeight = 0.04
      ori [set every repeat] = 0
      pos [set every repeat] = (-0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = 自己:$Self_A
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    TextComponent Others_Left_NL
      flip [set every repeat] = None
      letterHeight [set every repeat] = 0.04
      ori [set every repeat] = 0
      pos [set every repeat] = (-0.4, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = 他人:$Others_A
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    TextComponent Title_Right_NL
      color [set every repeat] = white
      contrast [set every repeat] = 1
      flip [set every repeat] = None
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.05
      ori [set every repeat] = 0
      pos [set every repeat] = (0.4, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $Title_Right
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    TextComponent Self_Right_NL
      color [set every repeat] = white
      contrast [set every repeat] = 1
      flip [set every repeat] = None
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.04
      ori [set every repeat] = 0
      pos [set every repeat] = (0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = 自己:$Self_B
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    TextComponent Others_Right_NL
      color [set every repeat] = white
      contrast [set every repeat] = 1
      flip [set every repeat] = None
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.04
      ori [set every repeat] = 0
      pos [set every repeat] = (0.4, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = 他人:$Others_B
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    KeyboardComponent key_prac_limited_NL
      allowedKeys [set every repeat] = 'a','l'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    PolygonComponent worn_NL
      contrast [set every repeat] = 1
      fillColor [set every repeat] = green
      lineColor [set every repeat] = white
      lineWidth [set every repeat] = 1
      pos [set every repeat] = (0, -0.5)
      shape = rectangle
      size [set every repeat] = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine end_word
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = jieshuyv
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    CodeComponent save_date
      Code Type = JS
      End JS Experiment:
        // --- DataPipe 发送配置 ---
        const experimentID = "r5PIffrX9PYteiMvsp4tgBy0dUnZq9hJ6aIFTREKywdQejVYM7wbaetEij2xDkrV0ZNxDh";  // ★★★ 替换这里！ ★★★
        const filename = `${expInfo['participant']}_${expInfo['date']}.csv`;

        // 定义发送数据的函数
        function saveData(name, data) {
          var xhr = new XMLHttpRequest();
          xhr.open('POST', 'https://pipe.jspsych.org/api/data'); // DataPipe API地址
          xhr.setRequestHeader('Content-Type', 'application/json');
          xhr.onreadystatechange = function() {
            if (xhr.readyState == XMLHttpRequest.DONE) {
              if (xhr.status == 200) {
                console.log("Data sent to DataPipe successfully.");
              } else {
                console.log("Data sending failed.");
              }
            }
          };
          xhr.send(JSON.stringify({
            experimentID: experimentID,
            filename: name,
            data: data
          }));
        }

        // 获取 PsychoJS 收集的数据
        // psychoJS.experiment.save() 会触发本地下载，同时返回数据对象
        // 我们在这里直接提取 CSV 格式的数据字符串
        let dataContent = psychoJS.experiment._trialsData; // 获取原始数据对象
        // 将数据转换为 CSV 格式 (需要调用 PsychoJS 内部转换函数)
        // 注意：不同版本 PsychoJS 获取 CSV 字符串的方法可能略有不同
        // 最稳妥的方法是利用 extraInfo 和 data 拼接，或者直接上传 dataContent (JSON格式)
        // 为了兼容性，这里我们先保存为 CSV 字符串格式上传
        let csvData = psychoJS.experiment.saveAsCSV();

        // 执行发送
        saveData(filename, csvData);
  Routine 间歇休息
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = 间歇30s
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # 假设您的Excel总共有 60 行，您想每 20 个试次休息一次
        # trials.thisN 是当前试次的索引（从0开始计数）

        # 这里的逻辑是：如果当前做完的试次数量（thisN+1）不是20或40，就跳过休息
        if (trials.thisN + 1) not in [56, 112]:
            continueRoutine = False
  Routine 练习_时间限制指导语
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        【注意：本组练习有时间限制】
        > 在接下来的练习中，由于任务要求您凭直觉快速反应，您需要在2秒内做出选择。
        >  * 屏幕上会出现一个倒计时进度条，显示剩余时间。
        >  * 如果您未在规定时间内做出按键反应，该试次将自动结束，且您和匿名参与者在该试次中都将获得 0 元。
        > 请尽可能快地做出决定，不要超时。

        > 准备好后，按 [空格键] 开始。
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine 练习_非时间限制指导语
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
         【注意：本组练习无时间限制】
        > 在接下来的练习中，请您仔细考虑每一个选项。
        >  * 本阶段没有时间限制。
        >  * 您可以根据需要花费任意长的时间来权衡利弊，直到您确信自己的选择反映了您的真实意愿。
        >  * 请不要为了追求速度而匆忙按键，准确表达您的偏好最为重要。

        > 准备好后，按 [空格键] 开始。
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine 实验_正式实验指导语
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        练习阶段结束。现在我们将进入正式实验阶段。
        > 从现在开始，您的每一个选择都将真实有效。实验包含多个小节（Block），在每个小节开始前，我会告知您该小节的具体要求（是否有时间限制）。
        > 请保持专注，并在实验过程中尽量避免身体大幅度晃动。

        > 按 [空格键] 开始正式实验
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine 实验_时间限制指导语
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        本小节任务要求：快速反应
        >  * 请依靠您的第一直觉，尽可能快地做出选择。
        >  * 您必须在2秒内完成按键，否则本试次作废，双方收益均为 0。
        >  * 请集中注意力，紧盯屏幕。

        > 准备好后，按 [空格键] 开始本小节。
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine 实验_非时间限制指导语
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        本小节任务要求：深思熟虑
        >  * 请仔细权衡每一个选项，按照您的真实意愿进行分配。
        >  * 本小节没有时间限制，无论您思考多久都可以。
        >  * 请确保您看清了两个方案的具体数值后再做决定。

        > 准备好后，按 [空格键] 开始本小节。
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine worn_page
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    PolygonComponent worn
      contrast [set every repeat] = 1
      fillColor [set every repeat] = red
      lineColor [set every repeat] = white
      lineWidth [set every repeat] = 1
      pos [set every repeat] = (0, -0.5)
      shape = rectangle
      size [set every repeat] = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # 检查上一个按键组件是否有反应
        # 如果有按键记录 (keys不为空)，则跳过警告
        if key_formal_limited.keys:
            continueRoutine = False
        else:
            # 如果没按键 (超时)，则记录这次超时，并显示警告
            continueRoutine = True
            # (可选) 在数据中标记超时
            thisExp.addData('timed_out', 1)
  Routine worn_page_prac
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    PolygonComponent worn_prac
      contrast [set every repeat] = 1
      fillColor [set every repeat] = red
      lineColor [set every repeat] = white
      lineWidth [set every repeat] = 1
      pos [set every repeat] = (0, -0.5)
      shape = rectangle
      size [set every repeat] = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent code_prac
      Code Type = Auto->JS
      Begin Routine:
        # 检查练习阶段的按键
        if key_prac_limited.keys:
            continueRoutine = False
        else:
            continueRoutine = True
  Routine start_word
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    TextComponent start_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        欢迎参加本次心理学实验。
        > 在本实验中，您将面临一系列关于金钱分配的选择。在每次选择中，屏幕上会出现两个不同的分配方案（例如“方案 A”和“方案 B”）。每个方案都包含两部分金额：一部分是分给您自己的，另一部分是分给另一位匿名参与者的。
        > 您的任务是根据自己的偏好，在两个方案中选择一个。请注意，实验中没有正确或错误的答案，请完全按照您的真实想法进行选择。

        > 按 [空格键] 继续。
    KeyboardComponent key_text
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine start_word
  Routine practise_instruction
  Routine 练习_时间限制指导语
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = altruism_High.xlsx
    isTrials = False
    loopType = fullRandom
    nReps = 1
    random seed = 10
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    conditions:
      [{'dS': 10, 'dO': 5, 'Self_B': 15, 'Other_B': 15, 'Self_A': 25, 'Other_A': 20, 'TimePressure': 'High', 'Title_Left': '方案一', 'Title_Right': '方案二'},
      {'dS': -5, 'dO': 10, 'Self_B': 13, 'Other_B': 13, 'Self_A': 8, 'Other_A': 23, 'TimePressure': 'High', 'Title_Left': None, 'Title_Right': None},
      {'dS': 10, 'dO': -5, 'Self_B': 16, 'Other_B': 16, 'Self_A': 26, 'Other_A': 11, 'TimePressure': 'High', 'Title_Left': None, 'Title_Right': None},
      {'dS': 0, 'dO': -10, 'Self_B': 17, 'Other_B': 17, 'Self_A': 17, 'Other_A': 7, 'TimePressure': 'High', 'Title_Left': None, 'Title_Right': None},
      {'dS': 5, 'dO': 0, 'Self_B': 10, 'Other_B': 10, 'Self_A': 15, 'Other_A': 10, 'TimePressure': 'High', 'Title_Left': None, 'Title_Right': None},
      {'dS': 0, 'dO': 5, 'Self_B': 11, 'Other_B': 11, 'Self_A': 11, 'Other_A': 16, 'TimePressure': 'High', 'Title_Left': None, 'Title_Right': None},
      {'dS': 0, 'dO': 10, 'Self_B': 13, 'Other_B': 13, 'Self_A': 13, 'Other_A': 23, 'TimePressure': 'High', 'Title_Left': None, 'Title_Right': None},
      {'dS': 0, 'dO': 10, 'Self_B': 19, 'Other_B': 19, 'Self_A': 19, 'Other_A': 29, 'TimePressure': 'High', 'Title_Left': None, 'Title_Right': None},
      {'dS': 0, 'dO': -5, 'Self_B': 15, 'Other_B': 15, 'Self_A': 15, 'Other_A': 10, 'TimePressure': 'High', 'Title_Left': None, 'Title_Right': None},
      {'dS': 10, 'dO': 5, 'Self_B': 19, 'Other_B': 19, 'Self_A': 29, 'Other_A': 24, 'TimePressure': 'High', 'Title_Left': None, 'Title_Right': None}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
    Routine practise_time_limited
    Routine worn_page_prac
  LoopTerminator trials_3
  Routine 练习_非时间限制指导语
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = altruism_Low.xlsx
    loopType = fullRandom
    nReps = 1
    random seed = 10
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    conditions:
      [{'dS': 10, 'dO': 5, 'Self_B': 15, 'Other_B': 15, 'Self_A': 25, 'Other_A': 20, 'TimePressure': 'Low', 'Title_Left': '方案一', 'Title_Right': '方案二'},
      {'dS': -5, 'dO': 10, 'Self_B': 13, 'Other_B': 13, 'Self_A': 8, 'Other_A': 23, 'TimePressure': 'Low', 'Title_Left': None, 'Title_Right': None},
      {'dS': 10, 'dO': -5, 'Self_B': 16, 'Other_B': 16, 'Self_A': 26, 'Other_A': 11, 'TimePressure': 'Low', 'Title_Left': None, 'Title_Right': None},
      {'dS': 0, 'dO': -10, 'Self_B': 17, 'Other_B': 17, 'Self_A': 17, 'Other_A': 7, 'TimePressure': 'Low', 'Title_Left': None, 'Title_Right': None},
      {'dS': 5, 'dO': 0, 'Self_B': 10, 'Other_B': 10, 'Self_A': 15, 'Other_A': 10, 'TimePressure': 'Low', 'Title_Left': None, 'Title_Right': None},
      {'dS': 0, 'dO': 5, 'Self_B': 11, 'Other_B': 11, 'Self_A': 11, 'Other_A': 16, 'TimePressure': 'Low', 'Title_Left': None, 'Title_Right': None},
      {'dS': 0, 'dO': 10, 'Self_B': 13, 'Other_B': 13, 'Self_A': 13, 'Other_A': 23, 'TimePressure': 'Low', 'Title_Left': None, 'Title_Right': None},
      {'dS': 0, 'dO': 10, 'Self_B': 19, 'Other_B': 19, 'Self_A': 19, 'Other_A': 29, 'TimePressure': 'Low', 'Title_Left': None, 'Title_Right': None},
      {'dS': 0, 'dO': -5, 'Self_B': 15, 'Other_B': 15, 'Self_A': 15, 'Other_A': 10, 'TimePressure': 'Low', 'Title_Left': None, 'Title_Right': None},
      {'dS': 10, 'dO': 5, 'Self_B': 19, 'Other_B': 19, 'Self_A': 29, 'Other_A': 24, 'TimePressure': 'Low', 'Title_Left': None, 'Title_Right': None}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
    Routine prac_time_none_limited
  LoopTerminator trials_4
  Routine 实验_正式实验指导语
  Routine 实验_时间限制指导语
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = altruism_High.xlsx
    loopType = sequential
    nReps = 3
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    conditions:
      [{'dS': 10, 'dO': 5, 'Self_B': 15, 'Other_B': 15, 'Self_A': 25, 'Other_A': 20, 'TimePressure': 'High', 'Title_Left': '方案一', 'Title_Right': '方案二'},
      {'dS': -5, 'dO': 10, 'Self_B': 13, 'Other_B': 13, 'Self_A': 8, 'Other_A': 23, 'TimePressure': 'High', 'Title_Left': None, 'Title_Right': None},
      {'dS': 10, 'dO': -5, 'Self_B': 16, 'Other_B': 16, 'Self_A': 26, 'Other_A': 11, 'TimePressure': 'High', 'Title_Left': None, 'Title_Right': None},
      {'dS': 0, 'dO': -10, 'Self_B': 17, 'Other_B': 17, 'Self_A': 17, 'Other_A': 7, 'TimePressure': 'High', 'Title_Left': None, 'Title_Right': None},
      {'dS': 5, 'dO': 0, 'Self_B': 10, 'Other_B': 10, 'Self_A': 15, 'Other_A': 10, 'TimePressure': 'High', 'Title_Left': None, 'Title_Right': None},
      {'dS': 0, 'dO': 5, 'Self_B': 11, 'Other_B': 11, 'Self_A': 11, 'Other_A': 16, 'TimePressure': 'High', 'Title_Left': None, 'Title_Right': None},
      {'dS': 0, 'dO': 10, 'Self_B': 13, 'Other_B': 13, 'Self_A': 13, 'Other_A': 23, 'TimePressure': 'High', 'Title_Left': None, 'Title_Right': None},
      {'dS': 0, 'dO': 10, 'Self_B': 19, 'Other_B': 19, 'Self_A': 19, 'Other_A': 29, 'TimePressure': 'High', 'Title_Left': None, 'Title_Right': None},
      {'dS': 0, 'dO': -5, 'Self_B': 15, 'Other_B': 15, 'Self_A': 15, 'Other_A': 10, 'TimePressure': 'High', 'Title_Left': None, 'Title_Right': None},
      {'dS': 10, 'dO': 5, 'Self_B': 19, 'Other_B': 19, 'Self_A': 29, 'Other_A': 24, 'TimePressure': 'High', 'Title_Left': None, 'Title_Right': None}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
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = altruism_High.xlsx
      loopType = sequential
      nReps = 1
      random seed = 56
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      conditions:
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      Routine Trail_loop_limited
      Routine worn_page
    LoopTerminator trials
    Routine 间歇休息
  LoopTerminator trials_5
  Routine 实验_非时间限制指导语
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = altruism_Low.xlsx
    loopType = random
    nReps = 3
    random seed = 56
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    conditions:
      [{'dS': 10, 'dO': 5, 'Self_B': 15, 'Other_B': 15, 'Self_A': 25, 'Other_A': 20, 'TimePressure': 'Low', 'Title_Left': '方案一', 'Title_Right': '方案二'},
      {'dS': -5, 'dO': 10, 'Self_B': 13, 'Other_B': 13, 'Self_A': 8, 'Other_A': 23, 'TimePressure': 'Low', 'Title_Left': None, 'Title_Right': None},
      {'dS': 10, 'dO': -5, 'Self_B': 16, 'Other_B': 16, 'Self_A': 26, 'Other_A': 11, 'TimePressure': 'Low', 'Title_Left': None, 'Title_Right': None},
      {'dS': 0, 'dO': -10, 'Self_B': 17, 'Other_B': 17, 'Self_A': 17, 'Other_A': 7, 'TimePressure': 'Low', 'Title_Left': None, 'Title_Right': None},
      {'dS': 5, 'dO': 0, 'Self_B': 10, 'Other_B': 10, 'Self_A': 15, 'Other_A': 10, 'TimePressure': 'Low', 'Title_Left': None, 'Title_Right': None},
      {'dS': 0, 'dO': 5, 'Self_B': 11, 'Other_B': 11, 'Self_A': 11, 'Other_A': 16, 'TimePressure': 'Low', 'Title_Left': None, 'Title_Right': None},
      {'dS': 0, 'dO': 10, 'Self_B': 13, 'Other_B': 13, 'Self_A': 13, 'Other_A': 23, 'TimePressure': 'Low', 'Title_Left': None, 'Title_Right': None},
      {'dS': 0, 'dO': 10, 'Self_B': 19, 'Other_B': 19, 'Self_A': 19, 'Other_A': 29, 'TimePressure': 'Low', 'Title_Left': None, 'Title_Right': None},
      {'dS': 0, 'dO': -5, 'Self_B': 15, 'Other_B': 15, 'Self_A': 15, 'Other_A': 10, 'TimePressure': 'Low', 'Title_Left': None, 'Title_Right': None},
      {'dS': 10, 'dO': 5, 'Self_B': 19, 'Other_B': 19, 'Self_A': 29, 'Other_A': 24, 'TimePressure': 'Low', 'Title_Left': None, 'Title_Right': None}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
    Routine Trail_loop_no_limited
    Routine 间歇休息
  LoopTerminator trials_2
  Routine end_word
